MacroName ScopeUtil

# Globally set the variable $ScopeName
ScopeName = TEM1

# Globally set the variable $MessageDir
MessageDir = Y:\DROPBOX\Notification\$ScopeName

# Globally set the variable $MessagePath
MessagePath = $MessageDir\message.txt

# Globally set the variable $DropboxPath
DropboxPath = Y:\DROPBOX

# Globally set the variable $CopyDir
CopyPath = $DropboxPath\TEMXcopy

# Globally set the variable $DataPath
DataPath = C:\Users\VALUEDGATANCUSTOMER\Data

# Globally set the variable PrecookMontageD
PrecookMontageD = 0

# Globally set the variable SecondsPerTile
SecondsPerTile = 15

# Globally set the variable MaxPercentChangeOverCapture
MaxPercentChangeOverCapture = 0.20